CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:myimages
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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